# Generated by Configurator on Mon Oct 10 09:34:06 CEST 2022

# Reset
Property,Core,Initialize,0

# Devices
Device,COM1,SerialManager,COM1
Device,BaumerOptronic,BaumerOptronic,BaumerOptronic
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,MagnificationChanger,LeicaDMI,MagnificationChanger
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,Transmitted Light,LeicaDMI,Transmitted Light

# Pre-init settings for devices
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM1

# Pre-init settings for COM ports
Property,COM1,AnswerTimeout,5000.0000
Property,COM1,BaudRate,19200
Property,COM1,DTR,Disable
Property,COM1,DataBits,8
Property,COM1,DelayBetweenCharsMs,0.0000
Property,COM1,Fast USB to Serial,Disable
Property,COM1,Handshaking,Off
Property,COM1,Parity,None
Property,COM1,StopBits,1
Property,COM1,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,MagnificationChanger,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,BaumerOptronic
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,4,5-EMP
Label,IL-Turret,3,4-LGC
Label,IL-Turret,2,3-EMP
Label,IL-Turret,1,2-N21
Label,IL-Turret,0,1-I3
# ObjectiveTurret
Label,ObjectiveTurret,6,7-0x 0na
Label,ObjectiveTurret,5,6-0x 0na
Label,ObjectiveTurret,4,5-4x 0.1na
Label,ObjectiveTurret,3,4-63x 1.4na
Label,ObjectiveTurret,2,3-2x 0.07na
Label,ObjectiveTurret,1,2-20x 0.4na
Label,ObjectiveTurret,0,1-10x 0.3na

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

